OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  Selection of 1sec epochs
  every 0.1sec.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "2" => #1
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Data=#1, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> theta Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
Data=#3, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> alpha Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 4
  Max crop value = 8
-> Simple DSP => #10
  Equation = x-26.387050
-> Matrix Display "theta Power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#10 -> Signal display "Alpha power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Input signal=#8 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = THETA
#1 -> beta Temporal Filter => #14
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
Data=#14, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> beta Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #19
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 15
  Max crop value = 30
-> Simple DSP => #21
  Equation = x-26.387050
Data=#21 -> Signal display "betapower"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#21 -> Matrix Display "beta Power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#19 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = BETA
#1 -> alfa Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #29
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 8
  Max crop value = 15
-> Simple DSP => #31
  Equation = x-26.387050
Data=#31 -> Signal display "alfapower"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#31 -> Matrix Display "alpfa power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#29 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = ALPHA

LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
